PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1260, 700]
  expName = intentional_binding
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent polygon
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 7.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 7.0
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  Routine beep
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    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response
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    TextComponent display_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and the beep sound (0-1000). Use the slider to pick the answer.
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "100", "200", "300", "400", "500", "600", "700", "800", "900", "1000"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/twara/OneDrive/Documents/ibcond.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{'delay': 0.1, 'freq': 1000, 'condition': 'unexp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'unexp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'unexp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'unexp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'unexp'},
      {'delay': 0.7, 'freq': 400, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 400, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 400, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 400, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 400, 'condition': 'exp'}]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
