PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = primingtask
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/twara/OneDrive/Documents/study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'Book'},
      {'study_word': 'Cushion'},
      {'study_word': 'Phone'},
      {'study_word': 'Marble'},
      {'study_word': 'Board'},
      {'study_word': 'Laptop'},
      {'study_word': 'Chart'},
      {'study_word': 'Tshirt'},
      {'study_word': 'Mouse'},
      {'study_word': 'Pastry'},
      {'study_word': 'Case'},
      {'study_word': 'Cruise'},
      {'study_word': 'Police'},
      {'study_word': 'Keys'},
      {'study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/twara/OneDrive/Documents/test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'reference': 'Laptop', 'old_new': 'old '},
      {'test_word': '_ha_t', 'reference': 'Chart', 'old_new': 'old '},
      {'test_word': 'T_hi_t', 'reference': 'Tshirt', 'old_new': 'old '},
      {'test_word': '_ou_e', 'reference': 'mouse', 'old_new': 'old '},
      {'test_word': 'P_s_r_', 'reference': 'Pastry', 'old_new': 'old '},
      {'test_word': 'c_s_', 'reference': 'Case', 'old_new': 'old '},
      {'test_word': '_r_is_', 'reference': 'Cruise', 'old_new': 'old '},
      {'test_word': 'P_li_e', 'reference': 'Police', 'old_new': 'old '},
      {'test_word': 'K_y_', 'reference': 'Keys', 'old_new': 'old '},
      {'test_word': 'P_st_r', 'reference': 'Poster', 'old_new': 'old '},
      {'test_word': '_o_rd', 'reference': 'Board', 'old_new': 'old '},
      {'test_word': '_a_bl_', 'reference': 'Marble', 'old_new': 'old '},
      {'test_word': '_ho_e', 'reference': 'Phone', 'old_new': 'old '},
      {'test_word': '_oo_', 'reference': 'Book', 'old_new': 'old '},
      {'test_word': 'c_s_io_', 'reference': 'Cushion', 'old_new': 'old '},
      {'test_word': 'ta_l_', 'reference': 'Table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'reference': 'Pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'reference': 'Vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'reference': 'Bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'reference': 'Camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
